PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'group': '3'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1280, 720]
  color = $[0,0,0]
  colorSpace = dkl
  expName = myVersion
  keyboardBackend = ioHub
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Routines
  Routine start_trial_ring
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from constant import *
      Begin Experiment:
        def euclidean_dist(vec1, vec2):
            return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)
      Begin Routine:
        win.mouseVisible =True #change to false
        #win.mouseVisible = False

        x_mouse,y_mouse = ring_mouse.getPos()

        ring_mouse_radius = euclidean_dist([fixation_ring.pos[0],fixation_ring.pos[1]], [x_mouse,y_mouse])

        Ring_W = ring_mouse_radius
        Ring_H = ring_mouse_radius
      Each Frame:
        x_mouse,y_mouse = ring_mouse.getPos()

        ring_mouse_radius = euclidean_dist([fixation_ring.pos[0],fixation_ring.pos[1]], [x_mouse,y_mouse])

        if ring_mouse_radius <= 1:
            mouse_circle_ring.opacity = 1
            Ring.opacity = 1
            if fixation_ring.contains(ring_mouse):
                continueRoutine = False
        else:
            mouse_circle_ring.opacity = 0
            Ring_W = ring_mouse_radius
            Ring_H = ring_mouse_radius
    MouseComponent ring_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent Ring
      fillColor = $None
      nVertices = 50
      shape = regular polygon...
      size [set every frame] = [Ring_W, Ring_H]
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_ring
      fillColor = $[1,1,1]
      nVertices = 36
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent mouse_circle_ring
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      nVertices = 36
      opacity = 0
      pos [set every frame] = baseline_mouse.getPos()
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine instruction_task
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    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        from psychopy import sound, core, visual, event
    MouseComponent instructions_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent instructions
      image = ins/Instructions_baseline.png
      size = (15, 15)
      startVal [time (s)] = 0.0
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  Routine instruction
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        import pandas as pd

        # Load the Excel file
        df = pd.read_excel(conditions_file)

        # Create an index to keep track of your current row in the dataframe
        current_row = 0

        # Initialize a mouse object for collecting mouse clicks
        mouse = event.Mouse(win=win)
      Begin Routine:
        image_value = df.iloc[current_row]['ins_images']

        display_image = False
        wait_for_click = False

        if pd.notna(image_value) and os.path.exists(image_value):  # Check if the image value exists
            # Setup the image stimulus for display
            image_stim = visual.ImageStim(win, image=image_value, pos=(0,0), size=(15, 15))
            display_image = True
            wait_for_click = True  # If there's an image, we'll wait for a click

        mouse.clickReset()  # Reset the mouse click state at the beginning of each routine
      Each Frame:
        if display_image:
            image_stim.draw()

            if wait_for_click:
                waiting = True
                while waiting:
                    if mouse.getPressed()[0]:  # If the left mouse button is pressed
                        waiting = False
                    image_stim.draw()  # You have to redraw the image while waiting
                    win.flip()  # Ensure that the image is displayed while waiting
      End Routine:
        if current_row < len(df) - 1:  # Check if it's not the last row
            current_row += 1
  Routine move
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    CodeComponent rotated_moving
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import math
        from psychopy.tools.coordinatetools import cart2pol
        from psychopy.tools.coordinatetools import pol2cart
        ###############
        beep = sound.Sound('A', secs=0.1)  # Initialize sound each time

        # Set up the clock
        clock = core.Clock()

        # Load the Excel file into a DataFrame
        df = pd.read_excel(conditions_file)

        # Initialize other variables
        current_row = 0

        def rotate_vector(dx, dy, radians):
            """Rotate a vector by a given angle in radians."""
            new_dx = dx * math.cos(radians) - dy * math.sin(radians)
            new_dy = dx * math.sin(radians) + dy * math.cos(radians)
            return new_dx, new_dy

        last_mouse_x, last_mouse_y = 0, 0
        point_x, point_y = 0, 0
      Begin Routine:
        from psychopy import sound, core, visual, event
        point_x, point_y = 0, 0

        routineClock = core.Clock()
        t = routineClock.getTime()
        bl = df.iloc[current_row]['block']
        ty= df.iloc[current_row]['type']

        prep_time = df.iloc[current_row]['p_time']

        beep_counter = 0
        interval = 0.25
        target_time = 0.750 - prep_time
        target_displayed = False

        # Begin Routine
        rotated_target_circle_2.setPos((0, 0))  # Set target position to the center
        rotated_target_circle_2.opacity = 0  # Make the target invisible

        #feedback change!
        rotated_target_circle_2.opacity = 1
        jumping_target.opacity = 0

        #

        last_mouse_x, last_mouse_y = 0, 0

        if bl == 'washout' or ty == 'generalization':
            mouse_circle_2.opacity = 0
        else:
            mouse_circle_2.opacity = 1

        # rotation angle
        angle = df.iloc[current_row]['rotation_angle']
        win.mouseVisible = False

        movement_started = False
        movement_ended = False

        movement_clock = core.Clock()

        lastPos = rotated_move_mouse.getPos()

        def test_movement_started():
            return euclidean_dist(rotated_move_mouse.getPos(), rotated_fixation_2.pos) > 0.5

        def test_movement_ended(mouseDist, movement_duration):
            if  mouseDist < 0.1 or movement_duration > 1:
                movement_ended = True
            else:
                movement_ended = False
            return movement_ended

        feedback_timer = core.Clock()
        feedback_timer.reset()
      Each Frame:
        routineClock.reset()

        # Loop for the remaining beeps
        if ty=='preparation':
            while beep_counter < 4:
                t = routineClock.getTime()

                # Check if it's time for the next beep
                if t >= beep_counter * interval:
                    beep.play()
                    beep_counter += 1

                if not target_displayed and t >= target_time:
                    rotated_target_circle_2.draw()
                    rotated_fixation_2.draw()
                    mouse_circle_2.draw()
                    print("****",point_x, point_y)
                    target_displayed = True
                    win.flip()


        # Get current mouse position
        current_mouse_x, current_mouse_y = mouse.getPos()

        # Calculate mouse movement vector
        delta_x = current_mouse_x - last_mouse_x
        delta_y = current_mouse_y - last_mouse_y

        # Rotate the movement vector by 30 degrees
        theta = math.radians(-angle)
        delta_x_rotated, delta_y_rotated = rotate_vector(delta_x, delta_y, theta)

        mouseDist = euclidean_dist((0, 0), (current_mouse_x, current_mouse_y))
        if mouseDist <= MAX_DISTANCE:
            point_x += delta_x_rotated
            point_y += delta_y_rotated

        # Update last known mouse position
        last_mouse_x, last_mouse_y = current_mouse_x, current_mouse_y

        # Calculate distance between rotated_move_mouse and center
        thisPos = rotated_move_mouse.getPos()
        lastPos = thisPos
        movement_duration = movement_clock.getTime()

        if not movement_started:
            movement_clock.reset()
            if test_movement_started():
                movement_started = True
                move_onset_time1 = core.monotonicClock.getTime()
                move_onset_time2 = ring_mouse.mouseClock.getTime()

        else:
            if test_movement_ended(mouseDist, movement_duration):
                movement_duration = movement_clock.getTime()
                move_end_time1 = core.monotonicClock.getTime()
                move_end_time2 = ring_mouse.mouseClock.getTime()
                continueRoutine = False

        current_mouse_x, current_mouse_y = mouse.getPos()
        delta_x = current_mouse_x - last_mouse_x
        delta_y = current_mouse_y - last_mouse_y

        # Calculate the Euclidean distance moved by the mouse in this frame
        mouseDist = euclidean_dist((0, 0), (current_mouse_x, current_mouse_y))

        if mouseDist <= MAX_DISTANCE:
            delta_x_rotated, delta_y_rotated = rotate_vector(delta_x, delta_y, theta)
            # Update the position of rotated_move_mouse
            point_x += delta_x_rotated
            point_y += delta_y_rotated
      End Routine:
        win.mouseVisible = False
        continueRoutine = False

        thisExp.addData('MoveOnsetTime1', move_onset_time1)
        thisExp.addData('MoveEndTime1', move_end_time1)

        thisExp.addData('MoveOnsetTime2', move_onset_time2)
        thisExp.addData('MoveEndTime2', move_end_time2)
    MouseComponent rotated_move_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    PolygonComponent rotated_fixation_2
      fillColor = $[1,1,1]
      nVertices = 36
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent rotated_target_circle_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      nVertices = 50
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    PolygonComponent mouse_circle_2
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      nVertices = 40
      pos [set every frame] = $[point_x, point_y]
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent jumping_target
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      lineWidth = 5
      nVertices = 50
      ori = 45
      pos [set every repeat] = (f_x,f_y)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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  Routine feedback
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    CodeComponent rotated_feedback_code
      Code Type = Py
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      Begin Experiment:
        # Load the Excel file into a DataFrame
        df = pd.read_excel(conditions_file)
        #def euclidean_dist(vec1, vec2):
        #    return sqrt((vec1[0] - vec2[0])**2 + (vec1[1] - vec2[1])**2)
      Begin Routine:
        # Assuming 'current_row' is defined somewhere in your script
        bl = df.iloc[current_row]['block']
        ty = df.iloc[current_row]['type']

        # Assuming 'jumping_target', 'rotated_target_circle_2', and 'rotated_mouse_circle' are defined stimuli
        jumping_target_2.opacity = 0
        rotated_target_circle_2.opacity = 0
        rotated_mouse_circle.opacity = 0

        if ty == 'feedback':
            jumping_target_2.opacity = 1
        else:
            rotated_target_circle_2.opacity = 1

        if bl == 'washout' or ty == 'generalization':
            rotated_mouse_circle.opacity = 0
        else:
            rotated_mouse_circle.opacity = 1

        # Assuming 'feedback_timer' is defined as a core.Clock somewhere in your script
        feedback_timer.reset()

        feedback_turned_on = False
        feedback_turned_off = False

        # Assuming 'rotated_target_circle2' is defined
        rotated_target_circle2.opacity = 0
      Each Frame:
        if not feedback_turned_on:
            if feedback_timer.getTime() >= FEEDBACK_DELAY:
                #rotated_mouse_circle.opacity = 1
                #rotated_target_circle2.opacity = 1
                feedback_turned_on = True
        elif not feedback_turned_off:
            if feedback_timer.getTime() >= (FEEDBACK_DELAY + FEEDBACK_DURATION):
                rotated_mouse_circle.opacity = 0
                feedback_turned_off = True
                rotated_fixation2.opacity = 0
                rotated_target_circle2.opacity = 0
        else:
            if feedback_timer.getTime() >= (FEEDBACK_DELAY + FEEDBACK_DURATION + BLANK_SCREEN):
                continueRoutine = False

        ty= df.iloc[current_row]['type']


        if bl == 'washout' or ty == 'generalization':
            mouse_circle_2.opacity = 0
        else:
            mouse_circle_2.opacity = 1
    MouseComponent rotated_feedback_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0
      timeRelativeTo = routine
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    PolygonComponent rotated_fixation2
      fillColor = $[1,1,1]
      nVertices = 36
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent rotated_target_circle2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      nVertices = 50
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    PolygonComponent rotated_mouse_circle
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      nVertices = 50
      opacity = 0
      pos [set every repeat] = (point_x,point_y)
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent jumping_target_2
      fillColor = $[-1,0,0]
      lineColor = $[-1,0,0]
      lineWidth = 5
      nVertices = 50
      ori = 45
      pos [set every repeat] = (f_x,f_y)
      shape = regular polygon...
      size = (1,1)
      startVal [time (s)] = 0
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  Routine origin_hold1
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    CodeComponent origin_hold
      Code Type = Py
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      Begin Experiment:
        import random
      Begin Routine:
        continue_loop = True


        win.mouseVisible = False

        fixed_delay_started = False
        random_delay_started = False
        fixed_delay_timer = core.Clock()
        random_delay_timer = core.Clock()
        fixed_delay_timer.reset()
        random_delay_timer.reset()
        random_delay_duration = random.choice(RANDOM_DELAY_DURATIONS)
      Each Frame:
        x_mouse, y_mouse = mouse.getPos()  # Replace 'mouse' with your mouse component's name
        ring_mouse_radius = euclidean_dist(fixation_ring.pos, [x_mouse, y_mouse])

        if ring_mouse_radius > 1:
            continueRoutine = False  # This ends the current routine


        if not baseline_fixation.contains(baseline_mouse):
            fixed_delay_started = False
            random_delay_started = False
            fixed_delay_timer.reset()
            random_delay_timer.reset()
        else:
            if not fixed_delay_started:
                fixed_delay_started = True
                fixed_delay_timer.reset()
            elif not random_delay_started:
                if fixed_delay_timer.getTime() >= FIXED_DELAY_DURATION:
                    random_delay_started = True
                    random_delay_timer.reset()
                    baseline_target_circle.autodraw = True
                    baseline_target_circle.status = STARTED
            else:
                if random_delay_timer.getTime() >= random_delay_duration:
                    continueRoutine = False
      End Routine:
        if ring_mouse_radius <= 1:
            trials_1.finished = True  # Replace 'yourLoopName' with the name of your loop
    MouseComponent baseline_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    PolygonComponent baseline_fixation
      fillColor = $[1,1,1]
      nVertices = 36
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent baseline_target_circle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      nVertices = 50
      opacity = 0
      ori = 45
      pos [set every repeat] = (target_x, target_y)
      shape = regular polygon...
      size = (0.4, 0.4)
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    PolygonComponent mouse_circle
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      nVertices = 40
      pos [set every frame] = baseline_mouse.getPos()
      shape = regular polygon...
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine file_selection
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    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        from time import sleep

        group = expInfo["group"]

        ###chage to the right link before use
        if group == '1':
            conditions_file="C:/Users/אחינעם רוזנצויג/Documents/פרוייקט 2023/Psy/Experiment_Psy/conditions_generalization.xlsx"
        elif group == '2':
            conditions_file="C:/Users/אחינעם רוזנצויג/Documents/פרוייקט 2023/Psy/Experiment_Psy/conditions_feedback.xlsx"
        elif group == '3':
            conditions_file="C:/Users/אחינעם רוזנצויג/Documents/פרוייקט 2023/Psy/Experiment_Psy/conditions_preparation.xlsx"
        elif group == '0':
            conditions_file="C:/Users/אחינעם רוזנצויג/Documents/פרוייקט 2023/Psy/Experiment_Psy/conditions_test.xlsx"
Flow
  Routine file_selection
  Routine instruction_task
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 'familiarization', 'type': 'original', 'number': 20, 'target_x': 4.000000000000001, 'target_y': 6.928203230275509, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 60, 'target_x': 4.000000000000001, 'target_y': -6.928203230275509, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 40, 'target_x': -8, 'target_y': 9.797174393178826e-16, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 50, 'target_x': -4.000000000000004, 'target_y': -6.928203230275508, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 10, 'target_x': 8, 'target_y': 0, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 30, 'target_x': -3.999999999999998, 'target_y': 6.92820323027551, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None},
      {'block': 'familiarization', 'type': 'original', 'number': 40, 'target_x': -8, 'target_y': 9.797174393178826e-16, 'rotation_angle': 0, 'ins_images': None, 'f_num': None, 'f_x': None, 'f_y': None}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
    LoopInitiator trials_1 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine start_trial_ring
      Routine origin_hold1
    LoopTerminator trials_1
    Routine move
    Routine feedback
    Routine instruction
  LoopTerminator trials
